PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = psychopyFrequency
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import os
        BIDS_path = os.path.join(_thisDir,"BIDS_dataset")
        from pathlib import Path
        exp_path = os.path.join(BIDS_path,"sub-"+expInfo["participant"],"ses-"+expInfo["session"])
        Path(exp_path).mkdir(parents=True, exist_ok=True)
        logFileExp = logging.LogFile(os.path.join(exp_path,"sub-"+expInfo["participant"] + "_ses-"+expInfo["session"] +'_EXPERIMENTLevel.log'), level=logging.EXP)
        logFileWarn = logging.LogFile(os.path.join(exp_path,"sub-"+expInfo["participant"] + "_ses-"+expInfo["session"] +'_WARNINGLevel.log'), level=logging.WARNING)

        mouvList = []

        repCount = {'allo':0,'help':0,'dribble':0,'lift':0,'controle':0}
      Begin Routine:
        #Nb = int(random()*5)
        #films = ['allo','help','dribble','lift','controle']
        mouvements = thisTrial["mouvements"]
        file = 'films' + '/' + mouvements + '.mp4'

        repCount[thisTrial["mouvements"]] = repCount[thisTrial["mouvements"]] + 1

        print("Current Trial: ",thisTrial["mouvements"])
      Each Frame:
        keys = event.getKeys()

        if 'p' in keys:
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(False)
            win.flip()
            event.waitKeys()
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(True)
      End Experiment:
        # Save metadata into subject & session specific JSON
        subject_sess_metadata = {
        'subject':expInfo["participant"],
        'session':expInfo["session"],
        'sessionMouvementChronology': mouvList,
        'sessinMouvementFrequency': repCount,
        'startDatetime': expInfo['date'],
        'endDatetime': data.getDateStr(),
        'expName': expName,
        'psychopyVersion': psychopyVersion,
        }

        import json

        with open(os.path.join(exp_path,"sub-"+expInfo["participant"] + "_ses-"+expInfo["session"] + '_metadata.json'), 'w') as fp:
            json.dump(subject_sess_metadata, fp)
      End Routine:
        # Save cam recording
        if cam.status == STARTED:
            cam.stop()
        cam_path = os.path.join(exp_path,"camera")
        cam_file = "sub-"+expInfo["participant"] + "_ses-"+expInfo["session"] + "_task-" + mouvements + "_rep-" + str(repCount[thisTrial["mouvements"]]) + "_camera.mp4"
        Path(cam_path).mkdir(parents=True, exist_ok=True)
        camFilename = os.path.join(cam_path, cam_file)
        cam.save(camFilename)
        thisExp.currentLoop.addData('cam.clip', camFilename)

        # Other metadata
        mouvList.append(mouvements)
    MovieComponent movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $file
      startVal [time (s)] = 10
      stopVal [duration (s)] = 30
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    SoundComponent sound_2
      sound = D
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 0.25
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    CameraComponent cam
      device = default
      mic = default
      saveFile = False
      startVal [time (s)] = 10
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('mouvements', 'allo')]),
      OrderedDict([('mouvements', 'help')]),
      OrderedDict([('mouvements', 'dribble')]),
      OrderedDict([('mouvements', 'lift')]),
      OrderedDict([('mouvements', 'controle')])]
    Routine trial
  LoopTerminator trials
